///////////////////////////////////////////////////////////////////////////////
//
// Platform-specific I/O
//
///////////////////////////////////////////////////////////////////////////////


mouse_input pointer (
    mouse_position_x = pointer_x
    mouse_position_y = pointer_y
    )


%define reset_pointer_position (x_position, y_position)
    move_mouse_cursor (
        device = pointer
        x_position = x_position
        y_position = y_position
        )
%end


///////////////////////////////////////////////////////////////////////////////
//
// The remainder of the experiment is shared among all platforms
//
///////////////////////////////////////////////////////////////////////////////


%include shared
